# Generated by Configurator on Sun May 03 08:02:32 PDT 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/ttyUSB0,SerialManager,/dev/ttyUSB0
Device,/dev/ttyACM0,SerialManager,/dev/ttyACM0
Device,DHub,ShapeokoGrbl,DHub
Device,DXYStage,ShapeokoGrbl,DXYStage
Device,DZStage,ShapeokoGrbl,DZStage
Device,Video4Linux2,video4linux2,Video4Linux2
Device,ArduinoNeoPixel-Hub,ArduinoNeoPixel,ArduinoNeoPixel-Hub
Device,ArduinoNeoPixel-Shutter,ArduinoNeoPixel,ArduinoNeoPixel-Shutter

# Pre-init settings for devices
Property,DHub,Port,/dev/ttyACM0
Property,DXYStage,TransposeMirrorX,1
Property,ArduinoNeoPixel-Hub,Port,/dev/ttyUSB0

# Pre-init settings for COM ports
Property,/dev/ttyUSB0,AnswerTimeout,500.0000
Property,/dev/ttyUSB0,BaudRate,9600
Property,/dev/ttyUSB0,DelayBetweenCharsMs,0.0000
Property,/dev/ttyUSB0,Handshaking,Off
Property,/dev/ttyUSB0,Parity,None
Property,/dev/ttyUSB0,StopBits,1
Property,/dev/ttyUSB0,Verbose,1
Property,/dev/ttyACM0,AnswerTimeout,500.0000
Property,/dev/ttyACM0,BaudRate,9600
Property,/dev/ttyACM0,DelayBetweenCharsMs,0.0000
Property,/dev/ttyACM0,Handshaking,Off
Property,/dev/ttyACM0,Parity,None
Property,/dev/ttyACM0,StopBits,1
Property,/dev/ttyACM0,Verbose,1

# Hub (parent) references
Parent,DXYStage,DHub
Parent,DZStage,DHub
Parent,ArduinoNeoPixel-Shutter,ArduinoNeoPixel-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Video4Linux2
Property,Core,Shutter,ArduinoNeoPixel-Shutter
Property,Core,Focus,DZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,XYStage,DXYStage
PixelSize_um,Res0,210.0


